; WURST-CPMG
; see L.A. O'Dell and R.W. Schurko, Chem. Phys. Lett. 464 (2008) 97-102
; uses pre-made WURST pulse eg, W_50us_500kHz_500
; easiest to phase via a magnitude calculation "mc"
; JK mods Jun 28, 2022
; Standardized WURST-CPMG pulse sequence for spin-1/2 and quadrupolar nuclei - Schurko research group, FSU/NHMFL, updated Jul 31, 2022.

;parameters:
;ns : 8 * n
;d1 : recycle delay
;d2 : echo delay ((d6-p5)/2)
;d3 : time to allow pulse ringdown, 10 to 100 us
;d6 : echo length
;pl1 : not used
;pl2 : not used
;pl9 : decoupling power - f2 set to max 50 KHz
;p5 : WURST pulse length                
;sp5 : WURST pulse power level 			
;spnam5: WURST pulse shape
;l22 : # of echos to be acquired  
;cnst1 : set TD to be number of complex points acquired

;$COMMENT=quadrupolar WURST-QCPMG sequence, samples continuously
;$CLASS=Solidsfmc
;$DIM=1D
;$TYPE=half integer quadrupoles
;$SUBTYPE=simple 1D
;$OWNER=Martine Monette
#include <Avance.incl>
#include <De.incl>
 
"d11=30m"
"d2=((d6-p5)/2)"
define delay del3
"del3=d3-1u"
"cnst1=((d6+d3*2+p5)*l22+d6)/dw"
define delay rest
"rest=aq-(cnst1*dw)"
 
1 ze													; sets all phases such that they are the first element after dummy scans
 
2 d11 do:f2
  d1
  10u reset1:f1							   ; reset NCO1 to 0 on channel 1
  ACQ_START(ph30,ph31)
  1u pl9:f2
  1u cw:f2
  (p5:sp5 ph1):f1						     ; WURST excitation pulse
  d2
  del3
  1u START_NEXT_SCAN				        ; tell receiver to acquire TD points
							
	 
3 (p5:sp5 ph2):f1						       ; WURST refocusing pulse
  del3
  1u
  d6 REC_UNBLK		    					; starts acquisition
  1u REC_BLK 							       ; stops acquisition 
  del3  
lo to 3 times l22
  1u do:f2
  rest
  rcyc=2
  d11 mc #0 to 2 F0(zd)
exit

ph0=0
ph1=0 0 1 1 2 2 3 3
ph2=1 3 2 0 3 1 0 2
ph30=0
ph31=0 0 1 1 2 2 3 3
